CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20150319195827
GitHash:d8289bf
ModuleCount:15
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|I:\\\\eva\\\\Jessica\\\\20150928_FFPE manual dewaxing\\\\analysis\\\\T96_25420
    Name of the file:Tiled_170206_AbAlign.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|None
    Process just a range of rows?:No
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    Group images by metadata?:Yes
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    Rescale intensities?:No

RunImageJ:[module_num:2|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notes:['']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
    Run an ImageJ command or macro?:Script
    Command:None
    Macro:if (java.lang.System.getProperty("multistackreg.temp") == null) {\\u000a    var path = java.io.File.createTempFile("multistackreg", ".tmp");\\u000a    path.delete();\\u000a    path.mkdir();\\u000a    path.deleteOnExit();\\u000a    java.lang.System.setProperty("multistackreg.temp", path.getAbsolutePath());\\u000a    java.lang.System.setProperty("java.io.tmpdir", java.lang.System.getProperty("multistackreg.temp"));\\u000a    java.lang.System.err.println("Setting Java temp dir to " + java.lang.System.getProperty("multistackreg.temp"));\\u000a}
    Macro language:BeanShell
    Input the currently active image in ImageJ?:No
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    Retrieve the currently active image from ImageJ?:No
    Name the current output image:ImageJImage
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:3|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notes:['Load reference image to ImageJ.']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
    Run an ImageJ command or macro?:Macro
    Command:None
    Macro:print("Images loading to Image J!");\\u000aeval("script", "System.setProperty('insitu.transform', java.io.File.createTempFile('Transformation','.txt').getAbsolutePath());");\\u000aprint("Saving alignment in " + getInfo("insitu.transform"));
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:Yes
    Select the input image:DAPI
    Retrieve the currently active image from ImageJ?:No
    Name the current output image:
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:4|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notes:['Align the general stain from current base to the general stain from reference base (rigid transformation) and the transformation matrix is saved. Here the binary outline images of the identified objects are used, but the general stain images after top-hat filtering can also be used instead and that will also save one identification step.']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
    Run an ImageJ command or macro?:Macro
    Command:None
    Macro:run("MultiStackReg", "stack_1=DAPI action_1=[Use as Reference] file_1=[] stack_2=SpecDAPI action_2=[Align to First Stack] file_2="+getInfo("insitu.transform")+" transformation=[Rigid Body] save");\\u000a
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:Yes
    Select the input image:SpecDAPI
    Retrieve the currently active image from ImageJ?:Yes
    Name the current output image:alignedDAPI
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:5|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
    Run an ImageJ command or macro?:Macro
    Command:Close
    Macro:run("Close All");
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:No
    Select the input image:hyb
    Retrieve the currently active image from ImageJ?:No
    Name the current output image:ImageJImage
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:6|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notes:['Load the transformation file and transform other images accordingly.']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
    Run an ImageJ command or macro?:Macro
    Command:None
    Macro:run("MultiStackReg", "stack_1=SpecBlob action_1=[Load Transformation File] file_1="+getInfo("insitu.transform")+" stack_2=None action_2=Ignore file_2=[] transformation=[Rigid Body]");\\u000a
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:Yes
    Select the input image:SpecBlob
    Retrieve the currently active image from ImageJ?:Yes
    Name the current output image:alignedSpecBlob
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:7|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
    Run an ImageJ command or macro?:Macro
    Command:Close
    Macro:run("Close All");
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:No
    Select the input image:hyb
    Retrieve the currently active image from ImageJ?:No
    Name the current output image:ImageJImage
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:8|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
    Run an ImageJ command or macro?:Macro
    Command:None
    Macro:run("MultiStackReg", "stack_1=Kv21 action_1=[Load Transformation File] file_1="+getInfo("insitu.transform")+" stack_2=None action_2=Ignore file_2=[] transformation=[Rigid Body]");\\u000a
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:Yes
    Select the input image:Kv21
    Retrieve the currently active image from ImageJ?:Yes
    Name the current output image:alignedKv21
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:9|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
    Run an ImageJ command or macro?:Macro
    Command:Close
    Macro:run("Close All");
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:No
    Select the input image:hyb
    Retrieve the currently active image from ImageJ?:No
    Name the current output image:ImageJImage
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:10|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
    Run an ImageJ command or macro?:Macro
    Command:Close
    Macro:run("Close All");\\u000aFile.delete(getInfo("insitu.transform"));\\u000aFile.delete(getInfo("multistackreg.temp") + File.separator + "StackRegSource");\\u000aFile.delete(getInfo("multistackreg.temp") + File.separator + "StackRegTarget");\\u000a
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:No
    Select the input image:hyb
    Retrieve the currently active image from ImageJ?:No
    Name the current output image:ImageJImage
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

GrayToColor:[module_num:11|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notes:['Only for visualization purpose.']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
    Select a color scheme:RGB
    Select the image to be colored red:alignedKv21
    Select the image to be colored green:alignedDAPI
    Select the image to be colored blue:DAPI
    Name the output image:overlayAligned
    Relative weight for the red image:20
    Relative weight for the green image:10
    Relative weight for the blue image:5
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:alignedDAPI
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:c1_
    Number of digits:2
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    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Aligned
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:alignedKv21
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:c3_
    Number of digits:2
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    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Aligned
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:alignedSpecBlob
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:c2_
    Number of digits:2
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    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Aligned
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:overlayAligned
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:overlayAligned_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|Alignment
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Select colormap:Spectral
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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