CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20150319195827
GitHash:d8289bf
ModuleCount:20
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|I:\\\\eva\\\\Jessica\\\\20150928_FFPE manual dewaxing\\\\analysis\\\\T96_25420
    Name of the file:Tiled_170208_SW.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|None
    Process just a range of rows?:No
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    Group images by metadata?:Yes
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    Rescale intensities?:No

IdentifyPrimaryObjects:[module_num:2|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notes:['Identify reference blobs from base 1 image.']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
    Select the input image:Npy
    Name the primary objects to be identified:Npy
    Typical diameter of objects, in pixel units (Min,Max):2,12
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.005
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
IdentifyPrimaryObjects:[module_num:3|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
    Select the input image:Sst
    Name the primary objects to be identified:Sst
    Typical diameter of objects, in pixel units (Min,Max):2,12
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.003
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
IdentifyPrimaryObjects:[module_num:4|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notes:['Identify blobs from current base. ']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:8
    Suppress local maxima that are closer than this minimum allowed distance:15
    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucleiOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.015
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
ConvertObjectsToImage:[module_num:5|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enabled:False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
    Select the input objects:Nuclei
    Name the output image:NucleiLabel
    Select the color format:uint16
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:Kv21
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:2
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.015
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
ConvertObjectsToImage:[module_num:7|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enabled:False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
    Select the input objects:Cells
    Name the output image:CellLabel
    Select the color format:uint16
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
ExpandOrShrinkObjects:[module_num:8|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
    Select the input objects:Cells
    Name the output objects:ExpandedCells
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:10
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    Retain the outlines of the identified objects?:Yes
    Name the outline image:ExpCellOutlines

ConvertObjectsToImage:[module_num:9|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enabled:False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
    Select the input objects:ExpandedCells
    Name the output image:ExpCellLabel
    Select the color format:uint16
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
GrayToColor:[module_num:10|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notes:['Only to visualize the identified objects before image registration.']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enabled:False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
    Select a color scheme:RGB
    Select the image to be colored red:ExpCellOutlines
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    Select the image to be colored blue:NucleiOutlines
    Name the output image:overlayOutlines
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
RelateObjects:[module_num:11|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notes:['Relate blobs to cells (not needed in some applications).']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
    Select the input child objects:Sst
    Select the input parent objects:Cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:12|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
    Select the input child objects:Sst
    Select the input parent objects:ExpandedCells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:13|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
    Select the input child objects:Npy
    Select the input parent objects:Cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:14|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
    Select the input child objects:Npy
    Select the input parent objects:ExpandedCells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
MeasureObjectSizeShape:[module_num:15|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enabled:False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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:ExpandedCells
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:Sst|Parent_Cells,Sst|Parent_ExpandedCells,Sst|Location_Center_Y,Sst|Location_Center_X,Npy|Location_Center_Y,Npy|Location_Center_X,Npy|Parent_Cells,Npy|Parent_ExpandedCells
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::
    Overwrite without warning?:No
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
SaveImages:[module_num:17|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:NucleiLabel
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:NucleiLabel_
    Number of digits:2
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    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Segmentation
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:18|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CellLabel
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:CellLabel_
    Number of digits:2
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    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Segmentation
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:19|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:ExpCellLabel
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:ExpCellLabel_
    Number of digits:2
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    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Segmentation
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:20|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:overlayOutlines
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:overlayOutlines_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|Outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Select colormap:Spectral
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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