CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723163113
GitHash:36df52d
ModuleCount:10
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|I:\\\\eva\\\\Jessica\\\\20150928_FFPE manual dewaxing\\\\analysis\\\\T96_25420
    Name of the file:Tiled.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|None
    Process just a range of rows?:No
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    Group images by metadata?:Yes
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    Rescale intensities?:No

EnhanceOrSuppressFeatures:[module_num:2|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notes:['Top-hat filtering.']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
    Select the input image:General_blob
    Name the output image:Enhanced_GeneralBlob
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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
EnhanceOrSuppressFeatures:[module_num:3|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
    Select the input image:A
    Name the output image:Enhanced_A
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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
EnhanceOrSuppressFeatures:[module_num:4|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
    Select the input image:C
    Name the output image:Enhanced_C
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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
EnhanceOrSuppressFeatures:[module_num:5|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
    Select the input image:G
    Name the output image:Enhanced_G
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:T
    Name the output image:Enhanced_T
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Identify reference blobs from base 1 image.']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
    Select the input image:Enhanced_GeneralBlob
    Name the primary objects to be identified:preblobs
    Typical diameter of objects, in pixel units (Min,Max):2,12
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:No
    Name the outline image:preBlobOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:Yes
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.0015
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
ExpandOrShrinkObjects:[module_num:8|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
    Select the input objects:preblobs
    Name the output objects:blobs
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
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    Retain the outlines of the identified objects?:Yes
    Name the outline image:BlobOutlines

MeasureObjectIntensity:[module_num:9|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notes:['Measure pixel intensities within each object.']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
    Hidden:5
    Select an image to measure:Enhanced_GeneralBlob
    Select an image to measure:Enhanced_A
    Select an image to measure:Enhanced_C
    Select an image to measure:Enhanced_G
    Select an image to measure:Enhanced_T
    Select objects to measure:blobs

ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:blobs|Intensity_MaxIntensity_Enhanced_A,blobs|Intensity_MaxIntensity_Enhanced_C,blobs|Intensity_MaxIntensity_Enhanced_G,blobs|Intensity_MaxIntensity_Enhanced_GeneralBlob,blobs|Intensity_MaxIntensity_Enhanced_T,blobs|Location_Center_Y,blobs|Location_Center_X
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:No
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