CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20150319195827
GitHash:d8289bf
ModuleCount:46
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|I:\\\\eva\\\\Jessica\\\\20150928_FFPE manual dewaxing\\\\analysis\\\\T96_25420
    Name of the file:Tiled_160220.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|None
    Process just a range of rows?:No
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    Group images by metadata?:Yes
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    Rescale intensities?:No

IdentifyPrimaryObjects:[module_num:2|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notes:['Nuclei identificaiton. Background/ foreground separation. Adaptive threshold strategy to compensate for the uneven illumination. Automatic thresholding strategy is usually enough if the DAPI staining is strong enough.']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enabled:False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
    Select the input image:Nuclei
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,150
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:6
    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucleiOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Custom
    Size of adaptive window:500
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
Smooth:[module_num:3|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notes:['Choose the channel with the strongest autofluorescence. The general stain image can also be used if the signal density is high enough.']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enabled:False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
    Select the input image:T
    Name the output image:SmoothedBack
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
IdentifySecondaryObjects:[module_num:4|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notes:['Use nuclei as seeds to identify cytoplasm with watershed of smoothed autofluorescence image. Since the image contains signal, autofluorescence and background, use otsu three-class. Adaptive threshold strategy to compensate for the uneven illumination (not always needed).']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enabled:False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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:SmoothedBack
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    Name the outline image:CellOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,0.005
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Method to calculate adaptive window size:Custom
    Size of adaptive window:200
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
EnhanceOrSuppressFeatures:[module_num:5|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notes:['Top-hat filtering.']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
    Select the input image:General_blob
    Name the output image:Enhanced_GeneralBlob
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:Spec_blob
    Name the output image:Enhanced_SpecBlob
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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
EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:A
    Name the output image:Enhanced_A
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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
EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:C
    Name the output image:Enhanced_C
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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
EnhanceOrSuppressFeatures:[module_num:9|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
    Select the input image:G
    Name the output image:Enhanced_G
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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
EnhanceOrSuppressFeatures:[module_num:10|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
    Select the input image:T
    Name the output image:Enhanced_T
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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
GrayToColor:[module_num:11|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
    Select a color scheme:RGB
    Select the image to be colored red:Enhanced_SpecBlob
    Select the image to be colored green:Enhanced_A
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    Name the output image:channelA_prealign
    Relative weight for the red image:20
    Relative weight for the green image:30
    Relative weight for the blue image:1
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
GrayToColor:[module_num:12|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
    Select a color scheme:RGB
    Select the image to be colored red:Enhanced_SpecBlob
    Select the image to be colored green:Enhanced_C
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    Name the output image:channelC_prealign
    Relative weight for the red image:20
    Relative weight for the green image:30
    Relative weight for the blue image:1
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
GrayToColor:[module_num:13|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
    Select a color scheme:RGB
    Select the image to be colored red:Enhanced_SpecBlob
    Select the image to be colored green:Enhanced_G
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    Name the output image:channelG_prealign
    Relative weight for the red image:20
    Relative weight for the green image:30
    Relative weight for the blue image:1
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
GrayToColor:[module_num:14|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
    Select a color scheme:RGB
    Select the image to be colored red:Enhanced_SpecBlob
    Select the image to be colored green:Enhanced_T
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    Name the output image:channelT_prealign
    Relative weight for the red image:20
    Relative weight for the green image:30
    Relative weight for the blue image:1
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
IdentifyPrimaryObjects:[module_num:15|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notes:['Identify reference blobs from base 1 image.']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
    Select the input image:Enhanced_GeneralBlob
    Name the primary objects to be identified:preblobs
    Typical diameter of objects, in pixel units (Min,Max):2,12
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:No
    Name the outline image:preBlobOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:Yes
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.005
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
IdentifyPrimaryObjects:[module_num:16|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notes:['Identify blobs from current base. ']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
    Select the input image:Enhanced_SpecBlob
    Name the primary objects to be identified:prehybs
    Typical diameter of objects, in pixel units (Min,Max):2,12
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:No
    Name the outline image:preHybOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:Yes
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.005
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
ExpandOrShrinkObjects:[module_num:17|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
    Select the input objects:preblobs
    Name the output objects:blobs
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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    Retain the outlines of the identified objects?:Yes
    Name the outline image:BlobOutlines

ExpandOrShrinkObjects:[module_num:18|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
    Select the input objects:prehybs
    Name the output objects:hybs
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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    Retain the outlines of the identified objects?:Yes
    Name the outline image:HybOutlines

GrayToColor:[module_num:19|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notes:['Only to visualize the identified objects before image registration.']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
    Select a color scheme:RGB
    Select the image to be colored red:BlobOutlines
    Select the image to be colored green:HybOutlines
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    Name the output image:blobs_prealign
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
RelateObjects:[module_num:20|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notes:['Relate blobs to cells (not needed in some applications).']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enabled:False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
    Select the input child objects:blobs
    Select the input parent objects:Cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RunImageJ:[module_num:21|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notes:['']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
    Run an ImageJ command or macro?:Script
    Command:None
    Macro:if (java.lang.System.getProperty("multistackreg.temp") == null) {\\u000a    var path = java.io.File.createTempFile("multistackreg", ".tmp");\\u000a    path.delete();\\u000a    path.mkdir();\\u000a    path.deleteOnExit();\\u000a    java.lang.System.setProperty("multistackreg.temp", path.getAbsolutePath());\\u000a    java.lang.System.setProperty("java.io.tmpdir", java.lang.System.getProperty("multistackreg.temp"));\\u000a    java.lang.System.err.println("Setting Java temp dir to " + java.lang.System.getProperty("multistackreg.temp"));\\u000a}
    Macro language:BeanShell
    Input the currently active image in ImageJ?:No
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    Retrieve the currently active image from ImageJ?:No
    Name the current output image:ImageJImage
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:22|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notes:['Load reference image to ImageJ.']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
    Run an ImageJ command or macro?:Macro
    Command:None
    Macro:print("Images loading to Image J!");\\u000aeval("script", "System.setProperty('insitu.transform', java.io.File.createTempFile('Transformation','.txt').getAbsolutePath());");\\u000aprint("Saving alignment in " + getInfo("insitu.transform"));
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:Yes
    Select the input image:BlobOutlines
    Retrieve the currently active image from ImageJ?:No
    Name the current output image:
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:23|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notes:['Align the general stain from current base to the general stain from reference base (rigid transformation) and the transformation matrix is saved. Here the binary outline images of the identified objects are used, but the general stain images after top-hat filtering can also be used instead and that will also save one identification step.']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
    Run an ImageJ command or macro?:Macro
    Command:None
    Macro:run("MultiStackReg", "stack_1=BlobOutlines action_1=[Use as Reference] file_1=[] stack_2=HybOutlines action_2=[Align to First Stack] file_2="+getInfo("insitu.transform")+" transformation=[Rigid Body] save");\\u000a
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:Yes
    Select the input image:HybOutlines
    Retrieve the currently active image from ImageJ?:Yes
    Name the current output image:all_hybs_aligned
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:24|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
    Run an ImageJ command or macro?:Macro
    Command:Close
    Macro:run("Close All");
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:No
    Select the input image:hyb
    Retrieve the currently active image from ImageJ?:No
    Name the current output image:ImageJImage
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:25|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notes:['Load the transformation file and transform other images accordingly.']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
    Run an ImageJ command or macro?:Macro
    Command:None
    Macro:run("MultiStackReg", "stack_1=Enhanced_SpecBlob action_1=[Load Transformation File] file_1="+getInfo("insitu.transform")+" stack_2=None action_2=Ignore file_2=[] transformation=[Rigid Body]");\\u000a
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:Yes
    Select the input image:Enhanced_SpecBlob
    Retrieve the currently active image from ImageJ?:Yes
    Name the current output image:Aligned_SpecBlob
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:26|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
    Run an ImageJ command or macro?:Macro
    Command:Close
    Macro:run("Close All");
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:No
    Select the input image:hyb
    Retrieve the currently active image from ImageJ?:No
    Name the current output image:ImageJImage
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:27|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
    Run an ImageJ command or macro?:Macro
    Command:None
    Macro:run("MultiStackReg", "stack_1=Enhanced_A action_1=[Load Transformation File] file_1="+getInfo("insitu.transform")+" stack_2=None action_2=Ignore file_2=[] transformation=[Rigid Body]");\\u000a
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:Yes
    Select the input image:Enhanced_A
    Retrieve the currently active image from ImageJ?:Yes
    Name the current output image:aligned_A
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:28|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
    Run an ImageJ command or macro?:Macro
    Command:Close
    Macro:run("Close All");
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:No
    Select the input image:hyb
    Retrieve the currently active image from ImageJ?:No
    Name the current output image:ImageJImage
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:29|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
    Run an ImageJ command or macro?:Macro
    Command:None
    Macro:run("MultiStackReg", "stack_1=Enhanced_C action_1=[Load Transformation File] file_1="+getInfo("insitu.transform")+" stack_2=None action_2=Ignore file_2=[] transformation=[Rigid Body]");\\u000a
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:Yes
    Select the input image:Enhanced_C
    Retrieve the currently active image from ImageJ?:Yes
    Name the current output image:aligned_C
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:30|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
    Run an ImageJ command or macro?:Macro
    Command:Close
    Macro:run("Close All");
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:No
    Select the input image:hyb
    Retrieve the currently active image from ImageJ?:No
    Name the current output image:ImageJImage
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:31|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
    Run an ImageJ command or macro?:Macro
    Command:None
    Macro:run("MultiStackReg", "stack_1=Enhanced_G action_1=[Load Transformation File] file_1="+getInfo("insitu.transform")+" stack_2=None action_2=Ignore file_2=[] transformation=[Rigid Body]");\\u000a
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:Yes
    Select the input image:Enhanced_G
    Retrieve the currently active image from ImageJ?:Yes
    Name the current output image:aligned_G
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:32|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
    Run an ImageJ command or macro?:Macro
    Command:Close
    Macro:run("Close All");
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:No
    Select the input image:hyb
    Retrieve the currently active image from ImageJ?:No
    Name the current output image:ImageJImage
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:33|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
    Run an ImageJ command or macro?:Macro
    Command:None
    Macro:run("MultiStackReg", "stack_1=Enhanced_T action_1=[Load Transformation File] file_1="+getInfo("insitu.transform")+" stack_2=None action_2=Ignore file_2=[] transformation=[Rigid Body]");\\u000a
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:Yes
    Select the input image:Enhanced_T
    Retrieve the currently active image from ImageJ?:Yes
    Name the current output image:aligned_T
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:34|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
    Run an ImageJ command or macro?:Macro
    Command:Close
    Macro:run("Close All");\\u000aFile.delete(getInfo("insitu.transform"));\\u000aFile.delete(getInfo("multistackreg.temp") + File.separator + "StackRegSource");\\u000aFile.delete(getInfo("multistackreg.temp") + File.separator + "StackRegTarget");\\u000a
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:No
    Select the input image:hyb
    Retrieve the currently active image from ImageJ?:No
    Name the current output image:ImageJImage
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

GrayToColor:[module_num:35|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notes:['Only for visualization purpose.']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
    Select a color scheme:RGB
    Select the image to be colored red:BlobOutlines
    Select the image to be colored green:all_hybs_aligned
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    Name the output image:blobs_align
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
ImageMath:[module_num:36|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notes:['Score the image registration. ']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
    Operation:Add
    Raise the power of the result by:1
    Multiply the result by:2
    Add to result:0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:AlignmentMath
    Image or measurement?:Image
    Select the first image:BlobOutlines
    Multiply the first image by:0.5
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    Image or measurement?:Image
    Select the second image:all_hybs_aligned
    Multiply the second image by:0.5
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
MeasureObjectIntensity:[module_num:37|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notes:['Measure pixel intensities within each object.']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
    Hidden:6
    Select an image to measure:Aligned_SpecBlob
    Select an image to measure:aligned_A
    Select an image to measure:aligned_C
    Select an image to measure:aligned_G
    Select an image to measure:aligned_T
    Select an image to measure:AlignmentMath
    Select objects to measure:blobs

ExportToSpreadsheet:[module_num:38|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:blobs|Intensity_MaxIntensity_AlignmentMath,blobs|Intensity_MaxIntensity_Aligned_SpecBlob,blobs|Intensity_MaxIntensity_aligned_A,blobs|Intensity_MaxIntensity_aligned_C,blobs|Intensity_MaxIntensity_aligned_T,blobs|Intensity_MaxIntensity_aligned_G,blobs|Location_Center_Y,blobs|Location_Center_X
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:No
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
SaveImages:[module_num:39|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Cell_outlines
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|Segmentation
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:40|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Nuclei_outlines
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|Segmentation
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:41|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
    Select the type of image to save:Image
    Select the image to save:blobs_prealign
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:blobs_prealign
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|Alignment
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Select colormap:Spectral
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:42|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
    Select the type of image to save:Image
    Select the image to save:blobs_align
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:blobs_align
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|Alignment
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Select colormap:Spectral
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:43|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
    Select the type of image to save:Image
    Select the image to save:channelA_prealign
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:A
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|ChannelOverlap
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Select colormap:Spectral
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:44|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
    Select the type of image to save:Image
    Select the image to save:channelC_prealign
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:C
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|ChannelOverlap
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Select colormap:Spectral
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:45|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
    Select the type of image to save:Image
    Select the image to save:channelG_prealign
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:G
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|ChannelOverlap
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Select colormap:Spectral
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:46|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
    Select the type of image to save:Image
    Select the image to save:channelT_prealign
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:T
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|ChannelOverlap
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Select colormap:Spectral
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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