CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20150319195827
GitHash:d8289bf
ModuleCount:6
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|
    Name of the file:Tiled_SW_170204.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:Yes
    Rows to process:24,100000
    Group images by metadata?:No
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    Rescale intensities?:Yes

IdentifyPrimaryObjects:[module_num:2|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
    Select the input image:Npy
    Name the primary objects to be identified:Npy
    Typical diameter of objects, in pixel units (Min,Max):2,12
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NpyOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:Yes
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.005
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
IdentifyPrimaryObjects:[module_num:3|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
    Select the input image:Sst
    Name the primary objects to be identified:Sst
    Typical diameter of objects, in pixel units (Min,Max):2,12
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:SstOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:Yes
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.003
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
GrayToColor:[module_num:4|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
    Select a color scheme:RGB
    Select the image to be colored red:SstOutlines
    Select the image to be colored green:NpyOutlines
    Select the image to be colored blue:DAPI
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
ExportToSpreadsheet:[module_num:5|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:Sst|Location_Center_Y,Sst|Location_Center_X,Npy|Location_Center_Y,Npy|Location_Center_X
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:No
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
SaveImages:[module_num:6|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
    Select the type of image to save:Image
    Select the image to save:ColorImage
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Overlay
    Number of digits:2
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    Saved file format:jpg
    Output file location:Default Output Folder sub-folder|Overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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