CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140725203347
GitHash:7bf8bde
ModuleCount:31
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|C:/xampp/htdocs/TissueMaps/uploaded/Xiaoyan/MouseLungTB/Test
    Name of the file:CellProfilerInput.csv
    Load images based on this data?:Yes
    Base image location:None|None
    Process just a range of rows?:No
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    Group images by metadata?:Yes
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    Rescale intensities?:No

EnhanceOrSuppressFeatures:[module_num:2|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
    Select the input image:General_blob
    Name the output image:Enhanced_GeneralBlob
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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
EnhanceOrSuppressFeatures:[module_num:3|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
    Select the input image:spec_blob
    Name the output image:Enhanced_SpecBlob
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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
EnhanceOrSuppressFeatures:[module_num:4|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
    Select the input image:A
    Name the output image:Enhanced_A
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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
EnhanceOrSuppressFeatures:[module_num:5|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
    Select the input image:C
    Name the output image:Enhanced_C
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:G
    Name the output image:Enhanced_G
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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
EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:T
    Name the output image:Enhanced_T
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:Enhanced_GeneralBlob
    Name the primary objects to be identified:preblobs
    Typical diameter of objects, in pixel units (Min,Max):1,9
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:No
    Name the outline image:preBlobOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.003
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:Enhanced_SpecBlob
    Name the primary objects to be identified:prehybs
    Typical diameter of objects, in pixel units (Min,Max):1,9
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:No
    Name the outline image:preHybOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.003
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
ExpandOrShrinkObjects:[module_num:10|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
    Select the input objects:preblobs
    Name the output objects:blobs
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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    Retain the outlines of the identified objects?:Yes
    Name the outline image:BlobOutlines

ExpandOrShrinkObjects:[module_num:11|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
    Select the input objects:prehybs
    Name the output objects:hybs
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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    Retain the outlines of the identified objects?:Yes
    Name the outline image:HybOutlines

GrayToColor:[module_num:12|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notes:['This step is only for visual verification of the results.']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
    Select a color scheme:RGB
    Select the image to be colored red:BlobOutlines
    Select the image to be colored green:HybOutlines
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    Name the output image:blobs_prealign
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
RunImageJ:[module_num:13|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
    Run an ImageJ command or macro?:Script
    Command:None
    Macro:if (java.lang.System.getProperty("multistackreg.temp") == null) {\\u000a    var path = java.io.File.createTempFile("multistackreg", ".tmp");\\u000a    path.delete();\\u000a    path.mkdir();\\u000a    path.deleteOnExit();\\u000a    java.lang.System.setProperty("multistackreg.temp", path.getAbsolutePath());\\u000a    java.lang.System.setProperty("java.io.tmpdir", java.lang.System.getProperty("multistackreg.temp"));\\u000a    java.lang.System.err.println("Setting Java temp dir to " + java.lang.System.getProperty("multistackreg.temp"));\\u000a}
    Macro language:Beanshell
    Input the currently active image in ImageJ?:No
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    Retrieve the currently active image from ImageJ?:No
    Name the current output image:ImageJImage
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:14|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notes:['Here we load the common stain to the alignment module in Image J.']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
    Run an ImageJ command or macro?:Macro
    Command:None
    Macro:print("Images loading to Image J!");\\u000aeval("script", "System.setProperty('insitu.transform', java.io.File.createTempFile('Transformation','.txt').getAbsolutePath());");\\u000aprint("Saving alignment in " + getInfo("insitu.transform"));
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:Yes
    Select the input image:BlobOutlines
    Retrieve the currently active image from ImageJ?:No
    Name the current output image:
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:15|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notes:["Here we align the combined images to the common stain, and save the transformation matrix to a file. When running, you have to click 'SAv;e, and say 'Yes' to overwrite the previously saved transformation matrix."]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
    Run an ImageJ command or macro?:Macro
    Command:None
    Macro:run("MultiStackReg", "stack_1=BlobOutlines action_1=[Use as Reference] file_1=[] stack_2=HybOutlines action_2=[Align to First Stack] file_2="+getInfo("insitu.transform")+" transformation=[Rigid Body] save");\\u000a
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:Yes
    Select the input image:HybOutlines
    Retrieve the currently active image from ImageJ?:Yes
    Name the current output image:all_hybs_aligned
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:16|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
    Run an ImageJ command or macro?:Macro
    Command:Close
    Macro:run("Close All");
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:No
    Select the input image:hyb
    Retrieve the currently active image from ImageJ?:No
    Name the current output image:ImageJImage
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:17|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notes:['Enhanced_SpecBlob is transformed based on the transformation matrices. This module is added so that the RCP intensities of current base can be read. -Xiaoyan']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
    Run an ImageJ command or macro?:Macro
    Command:None
    Macro:run("MultiStackReg", "stack_1=Enhanced_SpecBlob action_1=[Load Transformation File] file_1="+getInfo("insitu.transform")+" stack_2=None action_2=Ignore file_2=[] transformation=[Rigid Body]");\\u000a
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:Yes
    Select the input image:Enhanced_SpecBlob
    Retrieve the currently active image from ImageJ?:Yes
    Name the current output image:Aligned_SpecBlob
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:18|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
    Run an ImageJ command or macro?:Macro
    Command:Close
    Macro:run("Close All");
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:No
    Select the input image:hyb
    Retrieve the currently active image from ImageJ?:No
    Name the current output image:ImageJImage
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:19|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
    Run an ImageJ command or macro?:Macro
    Command:None
    Macro:run("MultiStackReg", "stack_1=Enhanced_A action_1=[Load Transformation File] file_1="+getInfo("insitu.transform")+" stack_2=None action_2=Ignore file_2=[] transformation=[Rigid Body]");\\u000a
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:Yes
    Select the input image:Enhanced_A
    Retrieve the currently active image from ImageJ?:Yes
    Name the current output image:aligned_A
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:20|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
    Run an ImageJ command or macro?:Macro
    Command:Close
    Macro:run("Close All");
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:No
    Select the input image:hyb
    Retrieve the currently active image from ImageJ?:No
    Name the current output image:ImageJImage
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:21|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
    Run an ImageJ command or macro?:Macro
    Command:None
    Macro:run("MultiStackReg", "stack_1=Enhanced_C action_1=[Load Transformation File] file_1="+getInfo("insitu.transform")+" stack_2=None action_2=Ignore file_2=[] transformation=[Rigid Body]");\\u000a
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:Yes
    Select the input image:Enhanced_C
    Retrieve the currently active image from ImageJ?:Yes
    Name the current output image:aligned_C
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:22|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
    Run an ImageJ command or macro?:Macro
    Command:Close
    Macro:run("Close All");
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:No
    Select the input image:hyb
    Retrieve the currently active image from ImageJ?:No
    Name the current output image:ImageJImage
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:23|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
    Run an ImageJ command or macro?:Macro
    Command:None
    Macro:run("MultiStackReg", "stack_1=Enhanced_G action_1=[Load Transformation File] file_1="+getInfo("insitu.transform")+" stack_2=None action_2=Ignore file_2=[] transformation=[Rigid Body]");\\u000a
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:Yes
    Select the input image:Enhanced_G
    Retrieve the currently active image from ImageJ?:Yes
    Name the current output image:aligned_G
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:24|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
    Run an ImageJ command or macro?:Macro
    Command:Close
    Macro:run("Close All");
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:No
    Select the input image:hyb
    Retrieve the currently active image from ImageJ?:No
    Name the current output image:ImageJImage
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:25|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
    Run an ImageJ command or macro?:Macro
    Command:None
    Macro:run("MultiStackReg", "stack_1=Enhanced_T action_1=[Load Transformation File] file_1="+getInfo("insitu.transform")+" stack_2=None action_2=Ignore file_2=[] transformation=[Rigid Body]");\\u000a
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:Yes
    Select the input image:Enhanced_T
    Retrieve the currently active image from ImageJ?:Yes
    Name the current output image:aligned_T
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

RunImageJ:[module_num:26|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
    Run an ImageJ command or macro?:Macro
    Command:Close
    Macro:run("Close All");\\u000aFile.delete(getInfo("insitu.transform"));\\u000aFile.delete(getInfo("multistackreg.temp") + File.separator + "StackRegSource");\\u000aFile.delete(getInfo("multistackreg.temp") + File.separator + "StackRegTarget");\\u000a
    Macro language:ECMAScript
    Input the currently active image in ImageJ?:No
    Select the input image:hyb
    Retrieve the currently active image from ImageJ?:No
    Name the current output image:ImageJImage
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0

GrayToColor:[module_num:27|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
    Select a color scheme:RGB
    Select the image to be colored red:BlobOutlines
    Select the image to be colored green:all_hybs_aligned
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    Name the output image:blobs_align
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
ImageMath:[module_num:28|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
    Operation:Add
    Raise the power of the result by:1
    Multiply the result by:2
    Add to result:0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:AlignmentMath
    Image or measurement?:Image
    :BlobOutlines
    :0.5
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    Image or measurement?:Image
    :all_hybs_aligned
    :0.5
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
MeasureObjectIntensity:[module_num:29|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notes:['c2_aligned (the real transfomred DO_c2 image of current hyb step) is measured instead of Filtered_DO_c2 (filtered DO_c2 image of reference layer)']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
    Hidden:6
    Select an image to measure:Aligned_SpecBlob
    Select an image to measure:aligned_A
    Select an image to measure:aligned_C
    Select an image to measure:aligned_G
    Select an image to measure:aligned_T
    Select an image to measure:AlignmentMath
    Select objects to measure:blobs

ExportToSpreadsheet:[module_num:30|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:blobs|Intensity_MaxIntensity_AlignmentMath,blobs|Intensity_MaxIntensity_Aligned_SpecBlob,blobs|Intensity_MaxIntensity_aligned_A,blobs|Intensity_MaxIntensity_aligned_C,blobs|Intensity_MaxIntensity_aligned_T,blobs|Intensity_MaxIntensity_aligned_G,blobs|Location_Center_Y,blobs|Location_Center_X
    Representation of Nan/Inf:Null
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
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
SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:blobs_prealign
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    Select method for constructing file names:Sequential numbers
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    Enter single file name:blobs_prealign
    Number of digits:4
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|Alignment
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Select colormap:Spectral
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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